CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:29
HasImagePlaneDetails:False

Images:[module_num:1|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    :
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage)

Metadata:[module_num:2|svn_version:'Unknown'|variable_revision_number:6|show_window:False|notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Extract metadata?:Yes
    Metadata data type:Text
    Metadata types:{}
    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^r(?P<Row>\d{2})c(?P<Column>\d{2})f(?P<Field>\d{2})p\d{2}_cp_masks.tif
    Regular expression to extract from folder name:^r(?P<Row>\d{2})c(?P<Column>\d{2})f(?P<Field>\d{2})p(?P<Plate>\d{2})_cp_masks.tif
    Extract metadata from:All images
    Select the filtering criteria:and (file does contain "")
    Metadata file location:Elsewhere...|
    Match file and image metadata:[]
    Use case insensitive matching?:No
    Metadata file name:None
    Does cached metadata exist?:No
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^r(?P<Row>\d{2})c(?P<Column>\d{2})f(?P<Field>\d{2})p\d{2}.tiff
    Regular expression to extract from folder name:(?P<Date>[0-9]{4}_[0-9]{2}_[0-9]{2})$
    Extract metadata from:All images
    Select the filtering criteria:and (file does contain "")
    Metadata file location:Elsewhere...|
    Match file and image metadata:[]
    Use case insensitive matching?:No
    Metadata file name:None
    Does cached metadata exist?:No
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
    Regular expression to extract from folder name:^.*/(?P<Replicate>(R|TS)\d{1})_(?P<Screen>[^/]+)(?:/[^/]+)?/(?P<Condition>\d{2})C/Plate(?P<Plate>\d{2})
    Extract metadata from:All images
    Select the filtering criteria:and (file does contain "")
    Metadata file location:Elsewhere...|
    Match file and image metadata:[]
    Use case insensitive matching?:No
    Metadata file name:None
    Does cached metadata exist?:No

NamesAndTypes:[module_num:3|svn_version:'Unknown'|variable_revision_number:8|show_window:False|notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Assign a name to:Images matching rules
    Select the image type:Grayscale image
    Name to assign these images:DNA
    Match metadata:[]
    Image set matching method:Order
    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
    Maximum intensity:255.0
    Process as 3D?:No
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:1.0
    Select the rule criteria:and (file does contain "cp_masks")
    Name to assign these images:SegMask
    Name to assign these objects:Cell
    Select the image type:Objects
    Set intensity range from:Image metadata
    Maximum intensity:255.0
    Select the rule criteria:and (file doesnot contain "cp_masks")
    Name to assign these images:MergedImage
    Name to assign these objects:Nucleus
    Select the image type:Color image
    Set intensity range from:Image bit-depth
    Maximum intensity:255.0

Groups:[module_num:4|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Do you want to group your images?:Yes
    grouping metadata count:3
    Metadata category:Replicate
    Metadata category:Column
    Metadata category:Row

ColorToGray:[module_num:5|svn_version:'Unknown'|variable_revision_number:4|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:MergedImage
    Conversion method:Split
    Image type:Channels
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
    Convert hue to gray?:Yes
    Name the output image:OrigHue
    Convert saturation to gray?:Yes
    Name the output image:OrigSaturation
    Convert value to gray?:Yes
    Name the output image:OrigValue
    Channel count:2
    Channel number:1
    Relative weight of the channel:1.0
    Image name:OrigGFP
    Channel number:2
    Relative weight of the channel:1.0
    Image name:OrigRFP

CorrectIlluminationCalculate:[module_num:6|svn_version:'Unknown'|variable_revision_number:2|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:OrigGFP
    Name the output image:IllumGFP
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
    Dilation radius:1
    Block size:60
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
    Method to calculate smoothing filter size:Automatic
    Approximate object diameter:10
    Smoothing filter size:10
    Retain the averaged image?:No
    Name the averaged image:IllumBlueAvg
    Retain the dilated image?:No
    Name the dilated image:IllumBlueDilated
    Automatically calculate spline parameters?:Yes
    Background mode:auto
    Number of spline points:5
    Background threshold:2.0
    Image resampling factor:2.0
    Maximum number of iterations:40
    Residual value for convergence:0.001

CorrectIlluminationCalculate:[module_num:7|svn_version:'Unknown'|variable_revision_number:2|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:OrigRFP
    Name the output image:IllumRFP
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
    Dilation radius:1
    Block size:60
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
    Method to calculate smoothing filter size:Automatic
    Approximate object diameter:10
    Smoothing filter size:10
    Retain the averaged image?:No
    Name the averaged image:IllumBlueAvg
    Retain the dilated image?:No
    Name the dilated image:IllumBlueDilated
    Automatically calculate spline parameters?:Yes
    Background mode:auto
    Number of spline points:5
    Background threshold:2.0
    Image resampling factor:2.0
    Maximum number of iterations:40
    Residual value for convergence:0.001

CorrectIlluminationApply:[module_num:8|svn_version:'Unknown'|variable_revision_number:5|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:OrigGFP
    Name the output image:GFP
    Select the illumination function:IllumGFP
    Select how the illumination function is applied:Divide
    Select the input image:OrigRFP
    Name the output image:RFP
    Select the illumination function:IllumRFP
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:9|svn_version:'Unknown'|variable_revision_number:15|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:GFP
    Name the primary objects to be identified:LDs
    Typical diameter of objects, in pixel units (Min,Max):3,12
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:7.0
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:5000
    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:2.1
    Lower and upper bounds on threshold:0.0,1.0
    Manual threshold:0.0
    Select the measurement to threshold with:None
    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:30
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Sauvola

IdentifyPrimaryObjects:[module_num:10|svn_version:'Unknown'|variable_revision_number:15|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:RFP
    Name the primary objects to be identified:UnmergedNuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:7.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:2000
    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.3
    Lower and upper bounds on threshold:0.0,1.0
    Manual threshold:0.0
    Select the measurement to threshold with:None
    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Otsu

SplitOrMergeObjects:[module_num:11|svn_version:'Unknown'|variable_revision_number:6|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input objects:UnmergedNuclei
    Name the new objects:UnmaskedNuclei
    Operation:Merge
    Maximum distance within which to merge objects:0
    Merge using a grayscale image?:No
    Select the grayscale image to guide merging:None
    Minimum intensity fraction:0.9
    Method to find object intensity:Closest point
    Merging method:Distance
    Select the parent object:None
    Output object type:Disconnected

MaskObjects:[module_num:12|svn_version:'Unknown'|variable_revision_number:3|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select objects to be masked:UnmaskedNuclei
    Name the masked objects:Nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cell
    Select the masking image:None
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:1
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:13|svn_version:'Unknown'|variable_revision_number:3|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select objects to be masked:LDs
    Name the masked objects:NuclearLDs
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nuclei
    Select the masking image:None
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:1
    Numbering of resulting objects:Renumber
    Invert the mask?:No

OverlayOutlines:[module_num:14|svn_version:'Unknown'|variable_revision_number:4|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Display outlines on a blank image?:No
    Select image on which to display outlines:GFP
    Name the output image:Overlays
    Outline display mode:Color
    Select method to determine brightness of outlines:Max of image
    How to outline:Thick
    Select outline color:red
    Select objects to display:Cell
    Select outline color:yellow
    Select objects to display:Nuclei
    Select outline color:#8080FF
    Select objects to display:LDs

SaveImages:[module_num:15|svn_version:'Unknown'|variable_revision_number:16|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the type of image to save:Image
    Select the image to save:Overlays
    Select method for constructing file names:Single name
    Select image name for file prefix:None
    Enter single file name:\g<Replicate>_c\g<Condition>r\g<Row>c\g<Column>f\g<Field>p01_overlays
    Number of digits:4
    Append a suffix to the image file name?:No
    Text to append to the image name:
    Saved file format:png
    Output file location:Default Output Folder sub-folder|./overlays
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...|
    How to save the series:T (Time)
    Save with lossless compression?:Yes

MeasureImageAreaOccupied:[module_num:16|svn_version:'Unknown'|variable_revision_number:5|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Measure the area occupied by:Objects
    Select binary images to measure:
    Select object sets to measure:Cell

MeasureObjectSizeShape:[module_num:17|svn_version:'Unknown'|variable_revision_number:3|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select object sets to measure:Cell, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectSizeShape:[module_num:18|svn_version:'Unknown'|variable_revision_number:3|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select object sets to measure:LDs, NuclearLDs
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureGranularity:[module_num:19|svn_version:'Unknown'|variable_revision_number:4|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select images to measure:GFP
    Measure within objects?:Yes
    Select objects to measure:Cell
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:20|svn_version:'Unknown'|variable_revision_number:4|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select images to measure:GFP, RFP
    Select objects to measure:Cell

MeasureObjectIntensity:[module_num:21|svn_version:'Unknown'|variable_revision_number:4|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select images to measure:RFP
    Select objects to measure:Nuclei

MeasureObjectIntensity:[module_num:22|svn_version:'Unknown'|variable_revision_number:4|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select images to measure:GFP, RFP
    Select objects to measure:LDs

MeasureObjectIntensityDistribution:[module_num:23|svn_version:'Unknown'|variable_revision_number:6|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select images to measure:GFP, RFP
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
    Maximum zernike moment:9
    Select objects to measure:Cell
    Object to use as center?:These objects
    Select objects to use as centers:None
    Scale the bins?:Yes
    Number of bins:4
    Maximum radius:100

MeasureTexture:[module_num:24|svn_version:'Unknown'|variable_revision_number:7|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select images to measure:GFP
    Select objects to measure:Cell
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

RelateObjects:[module_num:25|svn_version:'Unknown'|variable_revision_number:5|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Parent objects:Cell
    Child objects:Nuclei
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
    Name the output object:RelateObjects
    Parent name:None

RelateObjects:[module_num:26|svn_version:'Unknown'|variable_revision_number:5|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Parent objects:Cell
    Child objects:LDs
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
    Name the output object:RelateObjects
    Parent name:None

RelateObjects:[module_num:27|svn_version:'Unknown'|variable_revision_number:5|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Parent objects:Cell
    Child objects:NuclearLDs
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
    Name the output object:RelateObjects
    Parent name:None

ExportToDatabase:[module_num:28|svn_version:'Unknown'|variable_revision_number:28|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Database type:MySQL
    Database name:cellprofiler_analyst
    Add a prefix to table names?:Yes
    Table prefix:TGL3_DMA_PLATE01
    Output file location:Default Output Folder|\\\\192.168.0.48\\shared\\alexdj\\3FP_analysis\\features\\R1
    Create a CellProfiler Analyst properties file?:No
    Database host:192.168.0.48
    Username:cluster_cellprofiler
    Password:cluster_cellprofiler
    Name the SQLite database file:dad2-sac6s.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
    Calculate the per-well mean values of object measurements?:No
    Calculate the per-well median values of object measurements?:No
    Calculate the per-well standard deviation values of object measurements?:No
    Export measurements for all objects to the database?:Select...
    Select the objects:Cell,LDs,NuclearLDs,Nuclei
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
    Enter an image url prepend if you plan to access your files via http:
    Write image thumbnails directly to the database?:No
    Select the images for which you want to save thumbnails:BFP,GFP,RFP
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:384
    Select the plate metadata:Plate
    Select the well metadata:FileLocation
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
    Workspace measurement count:1
    Experiment name:TGL3_DMA_PLATE01
    Which objects should be used for locations?:Cell
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:No
    Overwrite without warning?:Data and schema
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
    Select an image to include:None
    Use the image name for the display?:Yes
    Image name:Channel1
    Channel color:red
    Do you want to add group fields?:No
    Enter the name of the group:Group
    Enter the per-image columns which define the group, separated by commas:ImageNumber, Image_Metadata_Plate, Image_Metadata_Well
    Do you want to add filter fields?:No
    Automatically create a filter for each plate?:No
    Create a CellProfiler Analyst workspace file?:No
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Object
    Enter the object name:Cell
    Select the X-axis measurement:AreaShape_Area
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Object
    Enter the object name:Cell
    Select the Y-axis measurement:AreaShape_Perimeter
    Select the Y-axis index:ImageNumber

CreateBatchFiles:[module_num:29|svn_version:'Unknown'|variable_revision_number:8|show_window:True|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Store batch files in default output folder?:Yes
    Output folder path:/Users/kylewang/Documents/Lab/CellProfiler/localOutputs
    Are the cluster computers running Windows?:No
    Hidden- in batch mode:No
    Hidden- in distributed mode:No
    Hidden- default input folder at time of save:/Users/kylewang/Documents/Lab/CellProfiler/localInputs
    Hidden- revision number:0
    Hidden- from old matlab:No
