CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:33
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage)

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^r(?P<Row>\d{2})c(?P<Column>\d{2})f(?P<Field>\d{2})p\d{2}_cp_masks.tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^r(?P<Row>\d{2})c(?P<Column>\d{2})f(?P<Field>\d{2})p\d{2}.tiff
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:^.*/(?P<Replicate>(R|TS)\d{1})_(?P<Screen>[^/]+)(?:/[^/]+)?/(?P<Condition>\d{2})C/Plate(?P<Plate>\d{2})
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "cp_masks")
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    Name to assign these objects:Cell
    Select the image type:Objects
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    Select the rule criteria:and (file doesnot contain "cp_masks")
    Name to assign these images:MergedImage
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:3
    Metadata category:Replicate
    Metadata category:Column
    Metadata category:Row

ColorToGray:[module_num:5|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
    Select the input image:MergedImage
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:1
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    Image name:OrigGFP
    Channel number:2
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    Image name:OrigRFP

CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:OrigGFP
    Name the output image:IllumGFP
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:OrigRFP
    Name the output image:IllumRFP
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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
    Select the input image:OrigGFP
    Name the output image:GFP
    Select the illumination function:IllumGFP
    Select how the illumination function is applied:Divide
    Select the input image:OrigRFP
    Name the output image:RFP
    Select the illumination function:IllumRFP
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

Smooth:[module_num:9|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
    Select the input image:GFP
    Name the output image:SmoothGFP
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
EnhanceOrSuppressFeatures:[module_num:10|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
    Select the input image:SmoothGFP
    Name the output image:EnhancedGFP
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceEdges:[module_num:11|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
    Select the input image:EnhancedGFP
    Name the output image:EdgedGFP
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    Select an edge-finding method:Kirsch
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:EdgedGFP
    Name the primary objects to be identified:UnshrunkVacuoles
    Typical diameter of objects, in pixel units (Min,Max):10,25
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:10000
    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.65
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:2
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    Thresholding method:Minimum Cross-Entropy

ExpandOrShrinkObjects:[module_num:13|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
    Select the input objects:UnshrunkVacuoles
    Name the output objects:UnmaskedVacuoles
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No
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
IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:RFP
    Name the primary objects to be identified:UnmergedNuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:2000
    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.25
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

SplitOrMergeObjects:[module_num:15|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
    Select the input objects:UnmergedNuclei
    Name the new objects:UnmaskedNuclei
    Operation:Merge
    Maximum distance within which to merge objects:0
    Merge using a grayscale image?:No
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    Merging method:Distance
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
ExpandOrShrinkObjects:[module_num:16|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
    Select the input objects:Cell
    Name the output objects:ShrunkenCells
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No
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
MaskObjects:[module_num:17|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
    Select objects to be masked:UnmaskedVacuoles
    Name the masked objects:Vacuoles
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ShrunkenCells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:18|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
    Select objects to be masked:UnmaskedNuclei
    Name the masked objects:Nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ShrunkenCells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GFP
    Name the output image:Overlays
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:yellow
    Select objects to display:Nuclei
    Select outline color:#8080FF
    Select objects to display:Vacuoles
    Select outline color:red
    Select objects to display:Cell

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:Overlays
    Select method for constructing file names:Single name
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    Enter single file name:\g<Replicate>_c\g<Condition>r\g<Row>c\g<Column>f\g<Field>p01_overlays
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|./overlays
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureImageAreaOccupied:[module_num:21|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
    Measure the area occupied by:Objects
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    Select object sets to measure:Cell

MeasureObjectSizeShape:[module_num:22|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
    Select object sets to measure:Cell, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectSizeShape:[module_num:23|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
    Select object sets to measure:Vacuoles
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureGranularity:[module_num:24|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
    Select images to measure:GFP
    Measure within objects?:Yes
    Select objects to measure:Cell
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:25|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
    Select images to measure:GFP, RFP
    Select objects to measure:Cell

MeasureObjectIntensity:[module_num:26|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
    Select images to measure:RFP
    Select objects to measure:Nuclei

MeasureObjectIntensity:[module_num:27|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
    Select images to measure:GFP, RFP
    Select objects to measure:Vacuoles

MeasureObjectIntensityDistribution:[module_num:28|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
    Select images to measure:GFP, RFP
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cell
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureTexture:[module_num:29|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
    Select images to measure:GFP
    Select objects to measure:Cell, Vacuoles
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

RelateObjects:[module_num:30|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
    Parent objects:Cell
    Child objects:Nuclei
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:31|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
    Parent objects:Cell
    Child objects:Vacuoles
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
ExportToDatabase:[module_num:32|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
    Database type:MySQL
    Database name:cellprofiler_analyst
    Add a prefix to table names?:Yes
    Table prefix:VPH1_TSA_37C_PLATE01
    Output file location:Default Output Folder|\\\\192.168.0.48\\shared\\alexdj\\3FP_analysis\\features\\R1
    Create a CellProfiler Analyst properties file?:No
    Database host:192.168.0.48
    Username:cluster_cellprofiler
    Password:cluster_cellprofiler
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    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
    Calculate the per-well mean values of object measurements?:No
    Calculate the per-well median values of object measurements?:No
    Calculate the per-well standard deviation values of object measurements?:No
    Export measurements for all objects to the database?:Select...
    Select the objects:Cell,Nuclei,Vacuoles
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:VPH1_TSA_37C_PLATE01
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    Export object relationships?:No
    Overwrite without warning?:Data and schema
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    Create a CellProfiler Analyst workspace file?:No
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
CreateBatchFiles:[module_num:33|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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